---
API: 2
OpenSesame: 3.0.2
Platform: nt
---
set width 1920
set uniform_coordinates "yes"
set title "posners exogeneous"
set subject_parity "even"
set subject_nr 0
set start "experiment"
set sampler_backend "legacy"
set mouse_backend "psycho"
set keyboard_backend "psycho"
set height 1080
set foreground "black"
set font_size 18
set font_italic "no"
set font_family "mono"
set font_bold "no"
set description "Default description"
set coordinates "uniform"
set compensation 0
set color_backend "psycho"
set clock_backend "psycho"
set canvas_backend "psycho"
set bidi "no"
set background "grey"

define sketchpad cue
	set duration 100
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=8 show_if="[cue]='left'" w=-128 x=-448 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=8 show_if="[cue]='right'" w=-128 x=576 y=64 z_index=0

define sketchpad cue_1
	set duration 100
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=8 show_if="[cue]='left'" w=-128 x=-448 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=8 show_if="[cue]='right'" w=-128 x=576 y=64 z_index=0

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run intro always
	run practice_loop always
	run new_feedback_1 always
	run experiment_loop_2 always

define loop experiment_loop_2
	set skip 0
	set repeat 3
	set order "random"
	set offset "no"
	set item "practice_1_2"
	set description "Repeatedly runs another item"
	set cycles 20
	set column_order "soa;cue;target"
	set break_if "never"
	setcycle 0 soa "0"
	setcycle 0 cue "left"
	setcycle 0 target "left"
	setcycle 1 soa "0"
	setcycle 1 cue "left"
	setcycle 1 target "right"
	setcycle 2 soa "0"
	setcycle 2 cue "right"
	setcycle 2 target "left"
	setcycle 3 soa "0"
	setcycle 3 cue "right"
	setcycle 3 target "right"
	setcycle 4 soa "50"
	setcycle 4 cue "left"
	setcycle 4 target "left"
	setcycle 5 soa "50"
	setcycle 5 cue "left"
	setcycle 5 target "right"
	setcycle 6 soa "50"
	setcycle 6 cue "right"
	setcycle 6 target "left"
	setcycle 7 soa "50"
	setcycle 7 cue "right"
	setcycle 7 target "right"
	setcycle 8 soa "150"
	setcycle 8 cue "left"
	setcycle 8 target "left"
	setcycle 9 soa "150"
	setcycle 9 cue "left"
	setcycle 9 target "right"
	setcycle 10 soa "150"
	setcycle 10 cue "right"
	setcycle 10 target "left"
	setcycle 11 soa "150"
	setcycle 11 cue "right"
	setcycle 11 target "right"
	setcycle 12 soa "300"
	setcycle 12 cue "left"
	setcycle 12 target "left"
	setcycle 13 soa "300"
	setcycle 13 cue "left"
	setcycle 13 target "right"
	setcycle 14 soa "300"
	setcycle 14 cue "right"
	setcycle 14 target "left"
	setcycle 15 soa "300"
	setcycle 15 cue "right"
	setcycle 15 target "right"
	setcycle 16 soa "600"
	setcycle 16 cue "left"
	setcycle 16 target "left"
	setcycle 17 soa "600"
	setcycle 17 cue "left"
	setcycle 17 target "right"
	setcycle 18 soa "600"
	setcycle 18 cue "right"
	setcycle 18 target "left"
	setcycle 19 soa "600"
	setcycle 19 cue "right"
	setcycle 19 target "right"
	run practice_1_2

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0

define advanced_delay fixation_delay
	set jitter_mode "Uniform"
	set jitter 250
	set duration 1000
	set description "Waits for a specified duration"

define advanced_delay fixation_delay_1
	set jitter_mode "Uniform"
	set jitter 250
	set duration 1000
	set description "Waits for a specified duration"

define sketchpad fixation_experiment
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0

define sketchpad intro
	set duration "keypress"
	set description "Displays stimuli"
	draw image center=1 file="instruction.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout 1000
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[target]"
	set allowed_responses "left;right"

define keyboard_response keyboard_response_1
	set timeout "infinite"
	set flush "yes"
	set duration "keypress"
	set description "Collects keyboard responses"
	set correct_response "[target]"
	set allowed_responses "left;right"

define logger log
	set description "Logs experimental data"
	set auto_log "no"
	log response_time_keyboard_response_1
	log subject_nr
	log soa
	log target
	log cue
	log correct
	log acc

define feedback new_feedback_1
	set reset_variables "yes"
	set duration "keypress"
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=yes font_family=hindi font_italic=no font_size=22 html=yes show_if=always text="This is the end of the practice block.<br />your average response time is [avg_rt]<br />and your average accuracy is [acc].<br /><br />press any key to continue to the experimental block. please keep ur eyes<br /> focused on the fixation points at all<br /> times and try to respond as fast and<br /> accurately as possible." x=0 y=-32 z_index=0

define inline_script new_inline_script
	set description "Executes Python code"
	set _run ""
	set _prepare ""

define sequence practice
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation always
	run fixation_delay always
	run cue always
	run soa always
	run target always
	run keyboard_response always

define sequence practice_1_2
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run fixation_experiment always
	run fixation_delay_1 always
	run cue_1 always
	run soa_1 always
	run target_1 always
	run keyboard_response_1 always
	run log always

define loop practice_loop
	set skip 0
	set repeat 1
	set order "random"
	set offset "no"
	set item "practice"
	set description "Repeatedly runs another item"
	set cycles 20
	set column_order "soa;cue;target"
	set break_if "never"
	setcycle 0 soa "0"
	setcycle 0 cue "left"
	setcycle 0 target "left"
	setcycle 1 soa "0"
	setcycle 1 cue "left"
	setcycle 1 target "right"
	setcycle 2 soa "0"
	setcycle 2 cue "right"
	setcycle 2 target "left"
	setcycle 3 soa "0"
	setcycle 3 cue "right"
	setcycle 3 target "right"
	setcycle 4 soa "50"
	setcycle 4 cue "left"
	setcycle 4 target "left"
	setcycle 5 soa "50"
	setcycle 5 cue "left"
	setcycle 5 target "right"
	setcycle 6 soa "50"
	setcycle 6 cue "right"
	setcycle 6 target "left"
	setcycle 7 soa "50"
	setcycle 7 cue "right"
	setcycle 7 target "right"
	setcycle 8 soa "150"
	setcycle 8 cue "left"
	setcycle 8 target "left"
	setcycle 9 soa "150"
	setcycle 9 cue "left"
	setcycle 9 target "right"
	setcycle 10 soa "150"
	setcycle 10 cue "right"
	setcycle 10 target "left"
	setcycle 11 soa "150"
	setcycle 11 cue "right"
	setcycle 11 target "right"
	setcycle 12 soa "300"
	setcycle 12 cue "left"
	setcycle 12 target "left"
	setcycle 13 soa "300"
	setcycle 13 cue "left"
	setcycle 13 target "right"
	setcycle 14 soa "300"
	setcycle 14 cue "right"
	setcycle 14 target "left"
	setcycle 15 soa "300"
	setcycle 15 cue "right"
	setcycle 15 target "right"
	setcycle 16 soa "600"
	setcycle 16 cue "left"
	setcycle 16 target "left"
	setcycle 17 soa "600"
	setcycle 17 cue "left"
	setcycle 17 target "right"
	setcycle 18 soa "600"
	setcycle 18 cue "right"
	setcycle 18 target "left"
	setcycle 19 soa "600"
	setcycle 19 cue "right"
	setcycle 19 target "right"
	run practice

define sketchpad soa
	set duration "[soa]"
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0

define sketchpad soa_1
	set duration "[soa]"
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0

define sketchpad target
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0
	draw fixdot color=black show_if="[target]='left'" style=default x=-512 y=0 z_index=0
	draw fixdot color=black show_if="[target]='right'" style=default x=512 y=0 z_index=0

define sketchpad target_1
	set duration 0
	set description "Displays stimuli"
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=64 y=64 z_index=0
	draw line color=black penwidth=2 show_if=always x1=0 x2=0 y1=16 y2=-16 z_index=0
	draw line color=black penwidth=2 show_if=always x1=16 x2=-16 y1=0 y2=0 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=-128 x=576 y=64 z_index=0
	draw rect color=black fill=0 h=-128 penwidth=1 show_if=always w=128 x=-576 y=64 z_index=0
	draw fixdot color=black show_if="[target]='left'" style=default x=-512 y=0 z_index=0
	draw fixdot color=black show_if="[target]='right'" style=default x=512 y=0 z_index=0

